CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:rawImages
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:rawImages
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:Red: 1
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    Image name:OrigCy5
    Channel number:Green: 2
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    Image name:Orig565
    Channel number:Blue: 3
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    Image name:Orig405

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Orig405
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):200,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:cellBodies
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:OrigCy5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:3
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
ExpandOrShrinkObjects:[module_num:8|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
    Select the input objects:cellBodies
    Name the output objects:Shrunken_cellBodies
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:9|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
    Select the input image:OrigCy5
    Name the output image:cells_in_647
    Use objects or an image as a mask?:Objects
    Select object for mask:Shrunken_cellBodies
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    Invert the mask?:No

MaskImage:[module_num:10|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
    Select the input image:Orig565
    Name the output image:cells_in_565
    Use objects or an image as a mask?:Objects
    Select object for mask:Shrunken_cellBodies
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    Invert the mask?:No

GaussianFilter:[module_num:11|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
    Select the input image:cells_in_565
    Name the output image:cells_in_565_GF
    Sigma:1

GaussianFilter:[module_num:12|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
    Select the input image:cells_in_647
    Name the output image:cells_in_647_GF
    Sigma:1

EnhanceOrSuppressFeatures:[module_num:13|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
    Select the input image:cells_in_565_GF
    Name the output image:Enh_565
    Select the operation:Enhance
    Feature size:7
    Feature type:Speckles
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    Speed and accuracy:Slow

EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:cells_in_647_GF
    Name the output image:Enh_647
    Select the operation:Enhance
    Feature size:7
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:Enh_565
    Name the primary objects to be identified:foci_in_565
    Typical diameter of objects, in pixel units (Min,Max):5,14
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.375
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:Enh_647
    Name the primary objects to be identified:foci_in_647
    Typical diameter of objects, in pixel units (Min,Max):4,14
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
RelateObjects:[module_num:17|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
    Parent objects:foci_in_565
    Child objects:foci_in_647
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:18|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
    Parent objects:foci_in_647
    Child objects:foci_in_565
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:19|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
    Parent objects:cellBodies
    Child objects:foci_in_565
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
RelateObjects:[module_num:20|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
    Parent objects:cellBodies
    Child objects:foci_in_647
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rawImages
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:cellBodies
    Select outline color:#FF8000
    Select objects to display:foci_in_565
    Select outline color:#FF0080
    Select objects to display:foci_in_647

ClassifyObjects:[module_num:22|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enabled:False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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:foci_in_565
    Select the measurement to classify by:Children_foci_in_647_Count
    Select bin spacing:Evenly spaced bins
    Number of bins:10
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawImages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\180301.coloc\\\\\\\\results\\\\\\\\overlays
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\180301.coloc\\\\\\\\results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:foci_in_565|Children_foci_in_647_Count,foci_in_565|Parent_cellBodies,foci_in_647|Children_foci_in_565_Count,foci_in_647|Parent_cellBodies
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:coloc_w6_
    Overwrite existing files without warning?:No
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