CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:rawImages
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:rawImages
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:Red: 1
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    Image name:Orig647
    Channel number:Green: 2
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    Image name:Orig405

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Orig405
    Name the primary objects to be identified:preNuclei
    Typical diameter of objects, in pixel units (Min,Max):140,280
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:preNuclei
    Name the output objects:Nuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:30
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
MaskImage:[module_num:8|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
    Select the input image:Orig647
    Name the output image:nuclei_in_647
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:nuclei_in_647
    Name the output image:Enh_647
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Slow

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:Enh_647
    Name the primary objects to be identified:foci_in_647
    Typical diameter of objects, in pixel units (Min,Max):4,14
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.2
    Lower and upper bounds on threshold:0.000925,1
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:foci_in_647
    Name the output objects:exp647
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
RelateObjects:[module_num:12|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
    Parent objects:Nuclei
    Child objects:foci_in_647
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
MaskImage:[module_num:13|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
    Select the input image:nuclei_in_647
    Name the output image:nuclei_647_masked_for_signals
    Use objects or an image as a mask?:Objects
    Select object for mask:exp647
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    Invert the mask?:Yes

MaskImage:[module_num:14|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
    Select the input image:nuclei_in_647
    Name the output image:nuclei_647_signals_only
    Use objects or an image as a mask?:Objects
    Select object for mask:exp647
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    Invert the mask?:No

Threshold:[module_num:15|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
    Select the input image:Orig647
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskImage:[module_num:16|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
    Select the input image:Orig647
    Name the output image:thresholded_mask_image
    Use objects or an image as a mask?:Image
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    Select image for mask:Threshold
    Invert the mask?:Yes

MeasureImageIntensity:[module_num:17|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
    Select the image to measure:thresholded_mask_image
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureObjectIntensity:[module_num:18|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
    Hidden:1
    Select an image to measure:nuclei_647_masked_for_signals
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:19|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
    Hidden:1
    Select an image to measure:Orig647
    Select objects to measure:foci_in_647

MeasureObjectSizeShape:[module_num:20|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
    Select objects to measure:foci_in_647
    Calculate the Zernike features?:No

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig647
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:Nuclei
    Select outline color:#FF0080
    Select objects to display:foci_in_647

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawImages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_tel_overlay
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\180402.tel.quant\\\\\\\\results\\\\\\\\overlays
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:nuclei_647_signals_only
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawImages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:tel_signals_only
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\180402.tel.quant\\\\\\\\results\\\\\\\\masked.images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:nuclei_647_masked_for_signals
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawImages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:branch_signals_masked
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\180402.tel.quant\\\\\\\\results\\\\\\\\masked.images
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:25|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\180402.tel.quant\\\\\\\\results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_MinIntensity_thresholded_mask_image,Image|Intensity_MeanIntensity_thresholded_mask_image,Image|Intensity_MaxIntensity_thresholded_mask_image,Image|Intensity_MedianIntensity_thresholded_mask_image,Nuclei|Intensity_MinIntensity_nuclei_647_masked_for_signals,Nuclei|Intensity_MeanIntensity_nuclei_647_masked_for_signals,Nuclei|Intensity_MeanIntensityEdge_nuclei_647_masked_for_signals,Nuclei|Intensity_MaxIntensity_nuclei_647_masked_for_signals,Nuclei|Children_foci_in_647_Count,foci_in_647|Parent_Nuclei,foci_in_647|Intensity_MinIntensity_Orig647,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:tel_quant_w8_
    Overwrite existing files without warning?:No
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